PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = mpstr
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Routines
  Routine square
    PolygonComponent square1
      fillColor = $[1,1,1]
      lineColor = $[255,255,255]
      opacity [set every frame] = s1
      pos = [-0.2,-0.2]
      shape = rectangle
      size = [0.1, 0.1]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent square2
      fillColor = $[1,1,1]
      opacity [set every frame] = s2
      pos = (0.2, 0.2)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent square3
      fillColor = $[1,1,1]
      opacity [set every frame] = s3
      pos = (-0.2, 0.2)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent square4
      fillColor = $[1,1,1]
      opacity [set every frame] = s4
      pos = (0.2, -0.2)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    CodeComponent code
      Code Type = Py
      Before Experiment:
        # This code will run before the experiment window is opened, after importing all of the necessary packages
      Begin Experiment:
        # This code will run before the experiment starts, after the window is opened and your other components are initialised but before the experiment timer starts
      Begin Routine:
        # This code will run at the start of the routine containing this component, after starting the necessary timers but before loading components

        cnt = 0
        s1 = 1
        s2 = 1
        s3 = 0
        s4 = 0
      Each Frame:
        # This code will run on each frame refresh during the routine containing this component, after iterating the frame but before the screen flip

        cnt += 1

        if cnt%30==0:
            s1 = 1-s1
            s2 = 1-s2
            s3 = 1-s3
            s4 = 1-s4
      End Experiment:
        # This code will run at the end of the experiment, just before saving the data and closing the window
      End Routine:
        # This code will run at the end of the routine containing this component, after breaking the frame loop but before resetting the timer
  Routine sphere1
    MovieComponent movie
      No audio = True
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = revolving_sphere.gif
      size = (400,400)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine sphere2
    MovieComponent movie_2
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = revolving_sphere.gif
      ori = 90
      size = (400,400)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine instr2
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Sphere2
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  Routine instr1
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Sphere1
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 2
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    Routine instr1
    Routine sphere1
    Routine instr2
    Routine sphere2
    Routine square
  LoopTerminator trials
